PsychoPy2experiment version="2020.1.0"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = AOC
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[0.804,0.804,0.961]
  expName = trk-encoding
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Routines
  Routine break_2
  Routine inter_task_break
  Routine start_encoding
    TextComponent start_encoding_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text [set every repeat]:
        Első feladat
        Galéria berendezés
    CodeComponent select_encoding_trials
      Code Type = Auto->JS
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      Begin Experiment:
        tables = [0]
        selected = np.random.choice(tables)
        selected = str(selected)
        stimuli_table = 'stimuli_tables/encoding_trials_'+ selected + '.csv'
    CodeComponent encoding_run_setup
      Code Type = Auto->JS
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      Begin Routine:
        start = 0
        end = 0
        step = 1
        n_runs = 3
        run_counter = 0
  Routine start_recognition
    CodeComponent recognition_run_setup
      Code Type = Auto->JS
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      Begin Routine:
        start = 0
        end = 0
        step = 1
        n_runs = 3
        run_counter = 0
    CodeComponent select_recognition_trials
      Code Type = Auto->JS
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      Begin Routine:
        stimuli_table = 'stimuli_tables/recognition_trials_'+ selected + '.csv'
    TextComponent start_recognition_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Második feladat
        Képfelismerés
  Routine start_enc_run
    CodeComponent create_enc_run
      Code Type = Auto->JS
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      Begin Routine:
        start = end
        end = start + 2
        selection = np.arange(start, end, step)
    CodeComponent enc_run_counter
      Code Type = Auto->JS
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      Begin Routine:
        run_counter = run_counter + 1
        end_run_text = 'Szünet\nA folytatáshoz nyomja le a jobb nyilat'

        if run_counter >= 3:
            end_run_text = 'Vége az első feladatnak'
    TextComponent start_enc_run_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Kezdődik a feladat...
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  Routine enc_trial
    ImageComponent enc_trial_map
      image = stimuli/GalleryPlanInside.jpg
      pos = (0, -25)
      size = (1040, 1000)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = pix
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    ImageComponent enc_trial_main_image
      image [set every repeat] = $CurrentImage
      pos [set every repeat] = (CurrentX, CurrentY)
      size = (300, 300)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = pix
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    KeyboardComponent enc_trial_key
      allowedKeys = 'f', 'j'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine consent
  Routine info
  Routine lab_introduction
    TextComponent lab_thanks
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120.0
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      text:
        Köszönjük, hogy hozzájárul kutatócsoportunk munkájához azzal, hogy részt vesz vizsgálatunkban!
    KeyboardComponent lab_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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  Routine enc_instructions_1
    TextComponent enc_instructions_1_text
      color = black
      letterHeight = 0.04
      pos = (-0.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 0.9
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      text:
        Ön ennek a modern képgalériának a kurátora.

        A legújabb kiállításra a vártnál több kép érkezett.

        Kurátorként az Ön feladata lesz eldönteni, mely képeket válogatjuk be a kiállított darabok közé, és hogy a kép illeszkedik-e a galéria adott pontjára.

        Az Ön ideje nagyon drága a galériának, így a döntésre egy-egy képről csak 3 másodperce lesz.

        A folytatáshoz nyomja le a jobb nyilat.
    ImageComponent enc_instructions_1_image
      image = stimuli/GalleryBuildingFromOutside.jpg
      pos = (450, 0.0)
      size = (600, 450)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      units = pix
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    KeyboardComponent enc_instructions_1_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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  Routine enc_instructions_2
    TextComponent enc_instructions_2_text
      color = black
      letterHeight = 0.04
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 0.7
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      text:
        Ez a galéria térképe felülről, nézze meg figyelmesen.

        A feladat során a képek a térképre vetítve jelennek meg, azon a helyen, ahol kiállításra kerülhetnek.

        Döntse el a képekről, hogy ki legyenek-e állítva a bemutatott helyen.

        Minden képet nézzen meg figyelmesen, és minden képre adjon választ.

        A folytatáshoz nyomja le a jobb nyilat.
    ImageComponent enc_instructions_2_image
      image = stimuli/GalleryInfo.jpg
      pos = (425, 0)
      size = (1000,750)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      units = pix
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    KeyboardComponent enc_instructions_2_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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  Routine enc_fx
    ImageComponent enc_fx_map
      durationEstim = 1.5
      image = stimuli/GalleryPlanInside.jpg
      pos = (0, -25)
      size = (1040, 1000)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      units = pix
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    TextComponent enc_fx_cross
      color = black
      durationEstim = 1.5
      letterHeight = 50
      pos [set every repeat] = (CurrentX, CurrentY)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text = +
      units = pix
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    KeyboardComponent enc_fx_key
      allowedKeys = 'f', 'j'
      durationEstim = 1.5
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
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  Routine start_rec_run
    CodeComponent create_rec_run
      Code Type = Both
      Begin JS Routine:
        start = end;
        end = (start + 3);
        selection = Array.from({length: end - start}, (_, index) => index + start)
      Begin Routine:
        start = end
        end = start + 3
        selection = np.arange(start, end, step)
    CodeComponent rec_run_counter
      Code Type = Auto->JS
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      Begin Routine:
        run_counter = run_counter + 1
        end_run_text = 'Szünet\nA folytatáshoz nyomja le a jobb nyilat'

        if run_counter >= 3:
            end_run_text = 'Vége a második feladatnak'
    TextComponent start_rec_run_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Kezdődik a feladat...
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  Routine end_rec_run
    TextComponent end_rec_run_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text [set every repeat] = $end_run_text
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    KeyboardComponent end_rec_run_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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  Routine rec_fx
    ImageComponent rec_fx_map
      durationEstim = 1.5
      image = stimuli/GalleryPlanInside.jpg
      pos = (0,-25)
      size = (1040, 1000)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      units = pix
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    TextComponent rec_fx_cross
      color = black
      durationEstim = 1.5
      letterHeight = 50
      pos [set every repeat] = (CurrentX, CurrentY)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text = +
      units = pix
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    KeyboardComponent rec_fx_key
      allowedKeys = 'f','j','k'
      durationEstim = 1.5
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
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  Routine rec_trial
    ImageComponent rec_trial_map
      image = stimuli/GalleryPlanInside.jpg
      pos = (0, -25)
      size = (1040, 1000)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = pix
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    ImageComponent rec_trial_main_image
      image [set every repeat] = $CurrentImage
      pos [set every repeat] = (CurrentX, CurrentY)
      size = (300,300)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = pix
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    KeyboardComponent rec_trial_key
      allowedKeys = 'f','j','k'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine end_enc_run_2
    TextComponent end_enc_run_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1200
      text [set every repeat] = $end_run_text
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    KeyboardComponent enc_run_end_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1200
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  Routine rec_instructions_1
    TextComponent rec_instructions_1_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120.0
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      text:
        A következő feladatban ismét absztrakt képeket fog látni, és ezekről kell eldöntenie, látta-e őket az első, műalkotás válogató feladataban, és hogy ugyanott látta-e őket.

        A feladatot két alfeladatra bontottuk. Az egyikben a képekről, a másikban a képek pozíciójáról kell döntenie.

        A folytatáshoz nyomja le a jobb nyilat.
    KeyboardComponent rec_instructions_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120.0
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  Routine rec_instructions_2
  Routine enc_instructions_3
    TextComponent enc_instructions_3_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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      text:
        A 'J' billentyűvel jelölje azokat a képeket, amelyek maradhatnak a galériában, a bemutatott helyen.
        Az 'F' billentyűvel jelölje a képeket, amelyek nem maradnak kiállítva a bemutatott helyen.

        Most a gyakorló feladat következik.

        Ha készen áll a gyakorlásra, nyomja le a jobb nyilat.
    KeyboardComponent enc_instructions_3_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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  Routine start_practice
  Routine end_practice
  Routine enc_practice_feedback
    CodeComponent enc_practice_feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        response = enc_trial_key.keys
        feedback_text = ''
        if response == 'f':
            feedback_text = 'Az Ön válasza: A kép nem marad.'
        elif response == 'j':
            feedback_text = 'Az Ön válasza: A kép marad.'
        else:
            feedback_text = 'Nem adott választ'
    TextComponent enc_practice_feedback_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_text
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Flow
  Routine consent
  Routine lab_introduction
  Routine start_encoding
  Routine enc_instructions_1
  Routine enc_instructions_2
  Routine enc_instructions_3
  Routine start_practice
  LoopInitiator enc_practice_trials loopType="TrialHandler"
    conditionsFile = encoding_practice_trials.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('StimType', 'practice'), ('Order', 'practice'), ('CurrentImage', 'Stimuli/Fractals/Practice/166a.jpg'), ('CurrentX', -300.0), ('CurrentY', 0.0), ('Jitter', 1500), ('Section', 'Encoding')]),
      OrderedDict([('StimType', 'practice'), ('Order', 'practice'), ('CurrentImage', 'Stimuli/Fractals/Practice/167a.jpg'), ('CurrentX', 300.0), ('CurrentY', 0.0), ('Jitter', 500), ('Section', 'Encoding')]),
      OrderedDict([('StimType', 'practice'), ('Order', 'practice'), ('CurrentImage', 'Stimuli/Fractals/Practice/148b.jpg'), ('CurrentX', 212.1320344), ('CurrentY', 212.1320344), ('Jitter', 1000), ('Section', 'Encoding')]),
      OrderedDict([('StimType', 'practice'), ('Order', 'practice'), ('CurrentImage', 'Stimuli/Fractals/Practice/159a.jpg'), ('CurrentX', 0.0), ('CurrentY', 300.0), ('Jitter', 5000), ('Section', 'Encoding')]),
      OrderedDict([('StimType', 'practice'), ('Order', 'practice'), ('CurrentImage', 'Stimuli/Fractals/Practice/177b.jpg'), ('CurrentX', 300.0), ('CurrentY', 0.0), ('Jitter', 800), ('Section', 'Encoding')])]
    Routine enc_fx
    Routine enc_trial
    Routine enc_practice_feedback
  LoopTerminator enc_practice_trials
  Routine end_practice
  LoopInitiator enc_runs loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine start_enc_run
    LoopInitiator enc_trials loopType="TrialHandler"
      Selected rows = $selection
      conditionsFile = $stimuli_table
      loopType = sequential
      nReps = 1
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      Routine enc_fx
      Routine enc_trial
    LoopTerminator enc_trials
    Routine end_enc_run_2
  LoopTerminator enc_runs
  Routine inter_task_break
  Routine start_recognition
  Routine rec_instructions_1
  Routine rec_instructions_2
  LoopInitiator rec_runs loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine start_rec_run
    LoopInitiator rec_trials loopType="TrialHandler"
      Selected rows = $selection
      conditionsFile = $stimuli_table
      loopType = sequential
      nReps = 1
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      Routine rec_fx
      Routine rec_trial
    LoopTerminator rec_trials
    Routine end_rec_run
  LoopTerminator rec_runs
